PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Telford Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will hear a tone through the speakers.
        Press the SPACEBAR as quickly as possible whenever you hear the tone.
        There will be two blocks of trials with a short break in between.

        There are no practice trials.

        Press SPACEBAR to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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
    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = A
      startVal [time (s)] = $ISI
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $ISI
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  Routine Break
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 115
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      text:
        You have completed the first half of the experiment.


        Please take a 2-minute break.


        The experiment will continue automatically.
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 115
      stopVal [duration (s)] = 5
      text = Second half will start in 5 seconds.
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  Routine Trial2
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = A
      startVal [time (s)] = $ISI
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = $ISI
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  Routine Thankyou
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thankyou for your participation.

        Your response has been recorded.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = block2_telford.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(2.0))])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
    Routine Trial
  LoopTerminator trials
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = block2_telford.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(0.5))]),
      OrderedDict([('ISI', np.float64(2.0))]),
      OrderedDict([('ISI', np.float64(1.0))]),
      OrderedDict([('ISI', np.float64(4.0))]),
      OrderedDict([('ISI', np.float64(1.0))])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
    Routine Trial2
  LoopTerminator trials_2
  Routine Thankyou
